PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'refreshRate': "['60', '120']"}
  Full-screen window = True
  Monitor = spotlight
  Screen = 1
  Units = deg
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = Müller_et_al_2003
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Routines
  Routine trial
    CodeComponent presentStim
      Code Type = Py
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      Begin Routine:
        # switchTime = 0
        frameCount = 0
        responseGiven = False
        targetPair = False
        nrOfEntries = 0
        cond = [pos2attLeft-1, pos2attRight-1]
        counter = 0
        opacities = [0,0,0,0]
        # List of components
        imList = [image_a, image_b, image_c, image_d]

        # Make all the symbols visible
        for im in imList:
            im.opacity = 1
      Each Frame:
        rects.draw() # Present place the boxes

        # List of default opacities, this will be written over for one frame by checkOpaStatus if necessary
        # This is just to keep the duration of "on frame" ~ 1000/60 ms (1000/60.8 in origina)
        if sum(opacities) and frameConst-counter <= 1: # frameConst == 1 on 60 Hz
            opacities = [0,0,0,0]
            counter = 0
        else:
            counter += 1
        # Sync at 533.3(3) ms after the start
        frameNow = startFrame + frameN
        # Change the opacity based cycle duration in frames
        opacities = checkOpaStatus(opacities, flipAfterEvery, frameNow) # fAE == [4, 7, 3, 5] by default
        # Change the opacity of the boxes based on checkOpaStatus()
        if t <= stimDur-waitRespTime:
            rects.opacities = opacities
        else: # If the presentation is over set back to 1
            rects.opacities = 1

        # Change symbol after every 183.3(3) ms
        if frameN % symShowFrames == 0: # symShowFrames == 11 frames (on 60 Hz)
            # Take random images from the set
            imCount = 0
            for im in imList:
                im.image = imageArray[randImage[imCount]] # randImage == [0,1,2,3,4,4,4,4]
                imCount += 1
            # If the target is in both of the target locations then
            if 'target' in imageArray[randImage[cond[0]]] and 'target' in imageArray[randImage[cond[1]]]:
                # If its first pair in the trial or wait time has exceeded
                if frameN-frameCount >= waitNextPairFrames or not nrOfEntries:
                    # If last set included target pair and no resp was recorded
                    if targetPair and not responseGiven:
                        addData('noResp', targetPair, absNumOfTrials, nrOfEntries) # Add data
                        nrOfEntries += 1 # Keep track of number of entries in current trial
                    switchTime = t # Start the clock
                    targetPair = True # This will be set False after every response (also in the very beginning)
                    frameCount = frameN # This will be used to check if wait time has exceeded
                    responseGiven = False # To keep track if response was already recorded
                else: # If wait time is not over yet but random sampling gave a another pair of
                    # targets then just change one of them randomly to non-target
                    imList[cond[randint(0,1)]].image = nonTargetSet[randint(0,4)] # nonTargetSet == imageArray[0:4]
            shuffle(randImage) # Shuffle for the next round

        # Check keys
        keys = kb.getKeys()

        if keys:
            if 'space' in keys[-1].name:
                if not targetPair:
                    addData('false alarm', targetPair, absNumOfTrials, nrOfEntries)
        #            addData('false alarm', targetPair) # , absNumOfTrials, nrOfEntries
                else:
                    addData(t-switchTime, targetPair, absNumOfTrials, nrOfEntries)
                nrOfEntries += 1
                responseGiven = True
                targetPair = False
            elif 'escape' in keys[-1].name:
                core.quit()

        # Do not show the symbols if the presentation is over (response will be still recorded)
        if t > stimDur-waitRespTime and imList[0].opacity:
            for im in imList:
                im.opacity = 0
    ImageComponent image_a
      durationEstim = 4.1
      image [set during: iti.ISI] = $imageArray[randImage[0]]
      pos = xys[0]
      saveStartStop = False
      size = symbolSize
      startVal [time (s)] = 0
      stopVal [duration (s)] = $stimDur
      texture resolution = 32
      units = deg
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    ImageComponent image_b
      durationEstim = 4.1
      image [set during: iti.ISI] = $imageArray[randImage[1]]
      pos = xys[1]
      saveStartStop = False
      size = symbolSize
      startVal [time (s)] = 0
      stopVal [duration (s)] = $stimDur
      texture resolution = 32
      units = deg
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    ImageComponent image_c
      durationEstim = 4.1
      image [set during: iti.ISI] = $imageArray[randImage[2]]
      pos = xys[2]
      saveStartStop = False
      size = symbolSize
      startVal [time (s)] = 0
      stopVal [duration (s)] = $stimDur
      texture resolution = 32
      units = deg
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    ImageComponent image_d
      durationEstim = 4.1
      image [set during: iti.ISI] = $imageArray[randImage[3]]
      pos = xys[3]
      saveStartStop = False
      size = symbolSize
      startVal [time (s)] = 0
      stopVal [duration (s)] = $stimDur
      texture resolution = 32
      units = deg
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    TextComponent fix_trial
      durationEstim = 4.1
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimDur
      text = +
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  Routine intro
    CodeComponent define_vars
      Code Type = Py
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      Begin Experiment:
        # Multiplier that scales the presentation times if the refresh rate is not 60
        frameConst = int(expInfo['refreshRate'])/60

        # This is to sync at 533.3(3) ms after the start of the presentation
        startFrame = 390 * frameConst

        # Waiting response after each presentation for that amount of time
        # Meaning that the "blank period" is this + whatever gets defined in iti routine
        waitRespTime = 1

        # NB! Actual stimulus duration is stimDur - waitRespTime
        stimDur = 3.1 + waitRespTime # stimDur = 4.1 # (e.g. 186 + 60 frames with 60 Hz)

        k = 0.8 # Just a scaler for rescaling the sizes
        boxSize = (2.5, 3.2)
        symbolSize = (2.5*k, 3.2*k) # Should scale down compared to boxes (if tranparent)?

        # Distance from centre to the centre of the stimuli in deg
        # ecc = [5.25, 10.25] # x (4 or 9) + (width of the stimulus (2.5 deg) / 2)
        ecc = [4, 9] # Maybe the distance was still from the middle of the symbol
        # List of box positions
        xys = [(ecc[1]*-1,0), (ecc[0]*-1,0),(ecc[0],0), (ecc[1],0)]

        # Array of place holder boxes to be presented on screen
        rects = visual.ElementArrayStim(win, name = 'rects', units='deg',
        fieldPos=(0.0, 0.0), fieldSize=(3, 4), fieldShape='square',
        nElements=4, sizes= boxSize, xys=xys,
        colors=([1.0, 1.0, 1.0]) , colorSpace='rgb', opacities=1, oris=0,
        sfs=0, contrs=[1, 1,1,1], phases=0, elementTex='sqr',
        elementMask=None, texRes=48, interpolate=True,
        autoLog=None, maskParams=None)

        # Make a keyboard object
        kb = keyboard.Keyboard()

        # List of images used
        imageArray = ['stimuli/rect_ur.png','stimuli/rect_dr.png','stimuli/rect_dl.png','stimuli/rect_ul.png','stimuli/rect_target.png']
        #imageArray = ['stimuli/rect_ur.jpg','stimuli/rect_dr.jpg','stimuli/rect_dl.jpg','stimuli/rect_ul.jpg','stimuli/rect_target.jpg']

        # 4x as many target stimuli in the set should give
        # (random sampling without replacement) aprox. 70% trials with 1-3 target pairs
        randImage = [0,1,2,3,4,4,4,4] # Each number represents a symbol (4 == target)
        shuffle(randImage) # Shuffle the pool for the first round
        # A set with no targets (to replace targets if minimum interval of 905 ms have not eceeded after presenting the last target pair)
        nonTargetSet = imageArray[0:4]
        # This helps with data entries (see the code component in the trial routine)
        def addData(rt, isPair, trials, nrOfEntries):
            if nrOfEntries > 0:
                thisExp.nextEntry()
            thisExp.addData('hand', hands[blocks.thisRepN])
            thisExp.addData('RT', rt)
            thisExp.addData('targetPair', isPair)
            thisExp.addData('absNumOfTrials', trials)

        # Flip after that many frames (on 60 hz monitor)
        flipAfterOriginal = [4, 7, 3, 5]
        # Multiply with the scaler
        flipAfterEvery = [element * frameConst for element in flipAfterOriginal]

        # This checks if opacity of the box needs to be turned up (see the code component in the trial routine)
        def checkOpaStatus(opas, flipAfterEvery, frameNow):
            for opai in range(0, len(opas)):
                if frameNow % flipAfterEvery[opai] == 0:
                    opas[opai] = 1
            return opas

        # Change the symbol in that many frames
        symShowFrames = 11*frameConst

        waitNextPairFrames = 54*frameConst # waitNextPairFrames = 54*frameConst # (aprox 900 ms, 905 in original)
  Routine iti
    CodeComponent iti_code
      Code Type = Py
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      Begin Experiment:
        absNumOfTrials = 0 # Keeps track of the number of trials
      Begin Routine:
        rects.opacities = 1 # Set the opacity back up for all the boxes
        absNumOfTrials += 1 # Increase the trial counter by 1
        thisExp.addData('absNumOfTrials', absNumOfTrials) # Send info about trial number to the data file
      Each Frame:
        rects.draw() # Presents place holders (white boxes)
    TextComponent fix_iti
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
      units = deg
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    StaticComponent ISI
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.7
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  Routine block_intro
    CodeComponent hands
      Code Type = Auto->JS
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      Begin Experiment:
        hands = ['left', 'right']
        shuffle(hands)
    TextComponent text_block
      letterHeight = 2
      startVal [time (s)] = 0.0
      text [set every repeat] = $attendCond + '\n\nWhich hand: ' + hands[blocks.thisRepN]
      units = deg
      wrapWidth = 20
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    KeyboardComponent key_block_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine outro
    TextComponent outro_text
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Experiment is over. Thank you for participating! 
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Flow
  Routine intro
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = blocks.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'attendCond': '1+2', 'pos2attLeft': 1, 'pos2attRight': 2},
      {'attendCond': '1+3', 'pos2attLeft': 1, 'pos2attRight': 3},
      {'attendCond': '3+4', 'pos2attLeft': 3, 'pos2attRight': 4},
      {'attendCond': '2+4', 'pos2attLeft': 2, 'pos2attRight': 4}]
    Routine block_intro
    LoopInitiator trials loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 12
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      Routine iti
      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine outro
